PsychoPy2experiment version="1.79.01"
Settings
  Save csv file = True
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = False
  Save log file = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Save excel file = True
  Save wide csv file = False
  expName = igt
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent random_sidecard
      Begin Routine:
        parameter_mirror = 0
        import random
        card_box=list([1,2])
        rand_card=random.choice(card_box)
        if rand_card==1:
            targetPos1=[-0.7, 0]#on the left
            targetPos2=[0.7, 0]#on the left
        else:
            targetPos1=[0.7, 0]#on the right
            targetPos2=[-0.7, 0]#on the left
    TextComponent Wait_com
      text = Wait Computer to Play
      stopVal [duration (s)] = 1.0
      pos = [0, -0.8]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_pressed
      stopVal [condition] = t>=3 or len(key_pressed.keys)>0
      forceEndRoutine = False
      allowedKeys = 'q','p'
      startVal [time (s)] = 1
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    CodeComponent para_mi_1
      Each Frame:
                parameter_mirror = 1
    CodeComponent time_computing
      Begin Experiment:
        instr_th = u''
      Each Frame:
        card_selected = 'fakevariable'
        Choice_result = 'fakevariable'
        if len(key_pressed.keys)>0:
         opacity_par_back = 1
         opacity_please_wait = 1
         opacity_result = 1
         opacity_nochoice = 0
         mid_disap_time = key_pressed.rt + 0.5
         side_disap_time = 1 + key_pressed.rt + 0.5
         wait_par_time = key_pressed.rt
         if key_pressed.keys == 'q':
            if rand_card==1:
                par_result_image = './image/1.jpg'
                card_selected = 'Black card'
            if rand_card==2:
                par_result_image = './image/2.jpg'
                card_selected = 'Red card'
         if key_pressed.keys == 'p':
            if rand_card==1:
                par_result_image = './image/2.jpg'
                card_selected = 'Red card'
            if rand_card==2:
                par_result_image = './image/1.jpg'
                card_selected = 'Black card'

         if par_result_image == com_result_image:
          win_or_loss = 'You Win'
          Choice_result = 'Win'
         if par_result_image != com_result_image:
          win_or_loss = 'You Loss'
          Choice_result = 'Loss'


        if t >= 3 and len(key_pressed.keys)==0:
         parameter_mirror = 2
         opacity_par_back = 0
         opacity_please_wait = 0
         opacity_result = 0
         par_result_image = './image/1.jpg'
         opacity_nochoice = 1
         mid_disap_time = 2
         side_disap_time = 3
         wait_par_time = 2
         win_or_loss = 'You Loss'
         Choice_result = 'N/A'
         card_selected = 'N/A'


        Sessions.addData('com_choice', card_selected_com)
        Sessions.addData('sub_choice', card_selected)
        Sessions.addData('feedback', Choice_result)
      Begin Routine:
        card_selected_com = 'fakevariable'
        if thisExternal_loop[u'sessionN'] == 's1':
          instr_th = u'You have finished session1, now you are going to session 2. \r\n\r\nWhen you are ready to start, press"SPACE"'
          if thisSession[u'com_result_pool'] == 1:
              com_result_image = './image/1.jpg'
              card_selected_com = 'Black card'
          if thisSession[u'com_result_pool'] == 2:
              com_result_image = './image/2.jpg'
              card_selected_com = 'Red card'

        if thisExternal_loop[u'sessionN'] == 's2':
          instr_th = u'Thanks'
          if thisSession[u'com_result_pool_s2'] == 1:
              com_result_image = './image/1.jpg'
              card_selected_com = 'Black card'
          if thisSession[u'com_result_pool_s2'] == 2:
              com_result_image = './image/2.jpg'
              card_selected_com = 'Red card'
    CodeComponent top_card_logic
      Each Frame:
        if thisSession[u'com_condi'] == 0:  # 1-5 are fake
                      opacity_top_card_1 = 0
                      opacity_top_card_2 = 0
                      opacity_top_card_3 = 0
                      opacity_top_card_4 = 0
                      opacity_top_card_5 = 0
                      top_card_1 = './image/1.jpg'
                      top_card_2 = './image/1.jpg'
                      top_card_3 = './image/2.jpg'
                      top_card_4 = './image/1.jpg'
                      top_card_5 = './image/2.jpg'

        if thisSession[u'com_condi'] == 1: # 2-5 are fake
                      opacity_top_card_1 = 1
                      opacity_top_card_2 = 0
                      opacity_top_card_3 = 0
                      opacity_top_card_4 = 0
                      opacity_top_card_5 = 0
                      top_card_2 = './image/1.jpg'
                      top_card_3 = './image/2.jpg'
                      top_card_4 = './image/1.jpg'
                      top_card_5 = './image/2.jpg'
                      if thisExternal_loop[u'sessionN'] == 's1':
                         top_card_1 = './image/2.jpg' # real one
                      if thisExternal_loop[u'sessionN'] == 's2':
                         top_card_1 = './image/1.jpg'


        if thisSession[u'com_condi'] == 2:
                      opacity_top_card_1 = 1
                      opacity_top_card_2 = 1
                      opacity_top_card_3 = 0
                      opacity_top_card_4 = 0
                      opacity_top_card_5 = 0
                      top_card_3 = './image/2.jpg'
                      top_card_4 = './image/1.jpg'
                      top_card_5 = './image/2.jpg'
                      if thisExternal_loop[u'sessionN'] == 's1':
                         top_card_1 = './image/2.jpg'# real one
                         top_card_2 = './image/1.jpg'# real one
                      if thisExternal_loop[u'sessionN'] == 's2':
                         top_card_1 = './image/1.jpg'
                         top_card_2 = './image/2.jpg'

        if thisSession[u'com_condi'] == 3:
                      opacity_top_card_1 = 1
                      opacity_top_card_2 = 1
                      opacity_top_card_3 = 1
                      opacity_top_card_4 = 0
                      opacity_top_card_5 = 0
                      top_card_4 = './image/1.jpg'
                      top_card_5 = './image/2.jpg'
                      if thisExternal_loop[u'sessionN'] == 's1':
                         top_card_1 = './image/2.jpg'# real one
                         top_card_2 = './image/1.jpg'# real one
                         top_card_3 = './image/1.jpg'# real one
                      if thisExternal_loop[u'sessionN'] == 's2':
                         top_card_1 = './image/1.jpg'# real one
                         top_card_2 = './image/2.jpg'# real one
                         top_card_3 = './image/2.jpg'# real one


        if thisSession[u'com_condi'] == 4:
                      opacity_top_card_1 = 1
                      opacity_top_card_2 = 1
                      opacity_top_card_3 = 1
                      opacity_top_card_4 = 1
                      opacity_top_card_5 = 0
                      top_card_5 = './image/2.jpg'
                      if thisExternal_loop[u'sessionN'] == 's1':
                         top_card_1 = './image/2.jpg'# real one
                         top_card_2 = './image/1.jpg'# real one
                         top_card_3 = './image/1.jpg'# real one
                         top_card_4 = './image/2.jpg'# real one
                      if thisExternal_loop[u'sessionN'] == 's2':
                         top_card_1 = './image/1.jpg'# real one
                         top_card_2 = './image/2.jpg'# real one
                         top_card_3 = './image/2.jpg'# real one
                         top_card_4 = './image/1.jpg'# real one


        if thisSession[u'com_condi'] == 5:
                      opacity_top_card_1 = 1
                      opacity_top_card_2 = 1
                      opacity_top_card_3 = 1
                      opacity_top_card_4 = 1
                      opacity_top_card_5 = 1
                      if thisExternal_loop[u'sessionN'] == 's1':
                         top_card_1 = './image/2.jpg'# real one
                         top_card_2 = './image/1.jpg'# real one
                         top_card_3 = './image/1.jpg'# real one
                         top_card_4 = './image/2.jpg'# real one
                         top_card_5 = './image/1.jpg'# real one
                      if thisExternal_loop[u'sessionN'] == 's2':
                         top_card_1 = './image/1.jpg'# real one
                         top_card_2 = './image/2.jpg'# real one
                         top_card_3 = './image/2.jpg'# real one
                         top_card_4 = './image/1.jpg'# real one
                         top_card_5 = './image/2.jpg'# real one

        if thisSession[u'com_condi'] > 5:
                prevTrial_5 = Sessions.getEarlierTrial(-5)
                prevTrial_4 = Sessions.getEarlierTrial(-4)
                prevTrial_3 = Sessions.getEarlierTrial(-3)
                prevTrial_2 = Sessions.getEarlierTrial(-2)
                prevTrial_1 = Sessions.getEarlierTrial(-1)
                opacity_top_card_1 = 1
                opacity_top_card_2 = 1
                opacity_top_card_3 = 1
                opacity_top_card_4 = 1
                opacity_top_card_5 = 1
                if thisExternal_loop[u'sessionN'] == 's1':
                      if prevTrial_5[u'com_result_pool'] == 1:
                         top_card_1 = './image/1.jpg'
                      if prevTrial_5[u'com_result_pool'] == 2:
                         top_card_1 = './image/2.jpg'

                      if prevTrial_4[u'com_result_pool'] == 1:
                         top_card_2 = './image/1.jpg'
                      if prevTrial_4[u'com_result_pool'] == 2:
                         top_card_2 = './image/2.jpg'

                      if prevTrial_3[u'com_result_pool'] == 1:
                         top_card_3 = './image/1.jpg'
                      if prevTrial_3[u'com_result_pool'] == 2:
                         top_card_3 = './image/2.jpg'

                      if prevTrial_2[u'com_result_pool'] == 1:
                         top_card_4 = './image/1.jpg'
                      if prevTrial_2[u'com_result_pool'] == 2:
                         top_card_4 = './image/2.jpg'

                      if prevTrial_1[u'com_result_pool'] == 1:
                         top_card_5 = './image/1.jpg'
                      if prevTrial_1[u'com_result_pool'] == 2:
                         top_card_5 = './image/2.jpg'

                if thisExternal_loop[u'sessionN'] == 's2':
                      if prevTrial_5[u'com_result_pool_s2'] == 1:
                         top_card_1 = './image/1.jpg'
                      if prevTrial_5[u'com_result_pool_s2'] == 2:
                         top_card_1 = './image/2.jpg'

                      if prevTrial_4[u'com_result_pool_s2'] == 1:
                         top_card_2 = './image/1.jpg'
                      if prevTrial_4[u'com_result_pool_s2'] == 2:
                         top_card_2 = './image/2.jpg'

                      if prevTrial_3[u'com_result_pool_s2'] == 1:
                         top_card_3 = './image/1.jpg'
                      if prevTrial_3[u'com_result_pool_s2'] == 2:
                         top_card_3 = './image/2.jpg'

                      if prevTrial_2[u'com_result_pool_s2'] == 1:
                         top_card_4 = './image/1.jpg'
                      if prevTrial_2[u'com_result_pool_s2'] == 2:
                         top_card_4 = './image/2.jpg'

                      if prevTrial_1[u'com_result_pool_s2'] == 1:
                         top_card_5 = './image/1.jpg'
                      if prevTrial_1[u'com_result_pool_s2'] == 2:
                         top_card_5 = './image/2.jpg'
    ImageComponent card_back_par
      opacity [set every frame] = $opacity_par_back
      stopVal [duration (s)] = 0.5
      pos = [0, -0.35]
      units = norm
      startVal [condition] = len(key_pressed.keys)>0 or parameter_mirror == 2
      image = ./image/0.jpg
      size = [0.25, 0.55]
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    TextComponent Wait_par
      text = Wait Participant to Play
      stopVal [condition] = len(key_pressed.keys)>0 or parameter_mirror == 2
      pos = [0, -0.8]
      units = norm
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent Please_Wait
      opacity [set every frame] = $opacity_please_wait
      text = Please Wait ...
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos = [0, -0.8]
      units = norm
      startVal [condition] = len(key_pressed.keys)>0 or parameter_mirror == 2
      letterHeight = 0.1
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    CodeComponent bugfix_plwa
      Each Frame:
            Please_Wait.setText(Please_Wait.text, log=False)
    ImageComponent card_back_com
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos = [0, 0.3]
      units = norm
      startVal [time (s)] = 1
      image [set every frame] = ./image/0.jpg
      size = [0.25, 0.55]
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    ImageComponent black_c
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos [set every frame] = $targetPos1
      units = norm
      startVal [time (s)] = 0
      image = ./image/1.jpg
      size = [0.25, 0.55]
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    ImageComponent red_c
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos [set every frame] = $targetPos2
      units = norm
      startVal [time (s)] = 0.0
      image = ./image/2.jpg
      size = [0.25, 0.55]
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    ImageComponent com_card_result
      stopVal [duration (s)] = 1
      pos = [0, 0.3]
      units = norm
      startVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      image [set every frame] = $com_result_image
      size = [0.25, 0.55]
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    ImageComponent par_card_result
      opacity [set every frame] = $opacity_result
      stopVal [duration (s)] = 1.0
      pos = [0, -0.35]
      units = norm
      startVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      image [set every frame] = $par_result_image
      size = [0.25, 0.55]
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    TextComponent winorloss
      text [set every frame] = $win_or_loss
      stopVal [duration (s)] = 1.0
      pos = [0, -0.8]
      units = norm
      startVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      letterHeight = 0.1
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    TextComponent Nochoice
      opacity [set every frame] = $opacity_nochoice
      text = No choice was made
      stopVal [duration (s)] = 1.0
      pos = [0, -0.4]
      units = norm
      startVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      letterHeight = 0.1
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    CodeComponent bugfix_noch
      Each Frame:
            Nochoice.setText(Nochoice.text, log=False)
    ImageComponent top_card_n1
      opacity [set every frame] = $opacity_top_card_1
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos = [-0.5, 0.83]
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $top_card_1
      size = [0.14, 0.29]
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    ImageComponent top_card_n2
      opacity [set every frame] = $opacity_top_card_2
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos = [-0.25, 0.83]
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $top_card_2
      size = [0.14, 0.29]
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    ImageComponent top_card_n3
      opacity [set every frame] = $opacity_top_card_3
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos = [0, 0.83]
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $top_card_3
      size = [0.14, 0.29]
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    ImageComponent top_card_n4
      opacity [set every frame] = $opacity_top_card_4
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos = [0.25, 0.83]
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $top_card_4
      size = [0.14, 0.29]
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    ImageComponent top_card_n5
      opacity [set every frame] = $opacity_top_card_5
      stopVal [condition] = (parameter_mirror == 1 and t > 1+ key_pressed.rt + 0.5) or parameter_mirror == 2
      pos = [0.5, 0.83]
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $top_card_5
      size = [0.14, 0.29]
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  Routine instr2
    TextComponent instr2_thanks
      wrapWidth = 1.4
      text [set every frame] = $instr_th
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_continue
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr
    ImageComponent image
      units = norm
      startVal [time (s)] = 0.0
      image = ./image/inst.png
      size = [2,2]
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    KeyboardComponent start_trial
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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Flow
  Routine instr
  LoopInitiator external_loop loopType="TrialHandler"
    conditionsFile = trial_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'sessionN': u's1'},
      {u'sessionN': u's2'}]
    LoopInitiator Sessions loopType="TrialHandler"
      conditionsFile = trial_com_choices.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{u'com_result_pool_s2': 1, u'com_condi': 0, u'com_result_pool': 2},
        {u'com_result_pool_s2': 2, u'com_condi': 1, u'com_result_pool': 1},
        {u'com_result_pool_s2': 2, u'com_condi': 2, u'com_result_pool': 1},
        {u'com_result_pool_s2': 1, u'com_condi': 3, u'com_result_pool': 2},
        {u'com_result_pool_s2': 2, u'com_condi': 4, u'com_result_pool': 1},
        {u'com_result_pool_s2': 1, u'com_condi': 5, u'com_result_pool': 2},
        {u'com_result_pool_s2': 2, u'com_condi': 6, u'com_result_pool': 1},
        {u'com_result_pool_s2': 1, u'com_condi': 7, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 8, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 9, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 10, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 11, u'com_result_pool': 2},
        {u'com_result_pool_s2': 2, u'com_condi': 12, u'com_result_pool': 1},
        {u'com_result_pool_s2': 1, u'com_condi': 13, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 14, u'com_result_pool': 2},
        {u'com_result_pool_s2': 2, u'com_condi': 15, u'com_result_pool': 1},
        {u'com_result_pool_s2': 1, u'com_condi': 16, u'com_result_pool': 2},
        {u'com_result_pool_s2': 2, u'com_condi': 17, u'com_result_pool': 1},
        {u'com_result_pool_s2': 1, u'com_condi': 18, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 19, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 20, u'com_result_pool': 2},
        {u'com_result_pool_s2': 1, u'com_condi': 21, u'com_result_pool': 2}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
      Routine trial
    LoopTerminator Sessions
    Routine instr2
  LoopTerminator external_loop
